CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:70
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file doesnot contain "Donuts") (file doesnot contain "Droplets") (file doesnot contain "Beads")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Lane>.*)_(?P<protocol>.*)_(?P<image_no>.*)_(?P<Field>.*)_(?P<Ch>.*)_(?P<Timepoint>.*).tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:CARMEN.*[\\/](?P<Experiment>[^ ]*).*[\\/](?P<Date>[0-9]{6})_(?P<Chip>[^ ]*)_.*$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'mask': None, 'Red': 'Experiment', 'Yellow': 'Experiment', 'Green': 'Experiment', 'Blue': 'Experiment'}, {'mask': None, 'Red': 'Chip', 'Yellow': 'Chip', 'Green': 'Chip', 'Blue': 'Chip'}, {'mask': None, 'Red': 'Date', 'Yellow': 'Date', 'Green': 'Date', 'Blue': 'Date'}, {'mask': None, 'Red': 'Lane', 'Yellow': 'Lane', 'Green': 'Lane', 'Blue': 'Lane'}, {'Blue': 'Timepoint', 'Green': 'Timepoint', 'Red': 'Timepoint', 'Yellow': 'Timepoint', 'mask': None}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Ch "CY5")
    Name to assign these images:Red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Ch "Texas Red")
    Name to assign these images:Yellow
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Ch "RFP")
    Name to assign these images:Green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Ch "GFP")
    Name to assign these images:Blue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "mask")
    Name to assign these images:mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:3
    Metadata category:Experiment
    Metadata category:Chip
    Metadata category:Lane

CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:Yellow
    Name the output image:IllumYellow
    Select how the illumination function is calculated:Background
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    Block size:25
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:Red
    Name the output image:IllumRed
    Select how the illumination function is calculated:Background
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    Block size:25
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:Green
    Name the output image:IllumGreen
    Select how the illumination function is calculated:Background
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    Block size:25
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:Blue
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:25
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:9|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
    Select the input image:Yellow
    Name the output image:CropYellowCorr
    Select the illumination function:IllumYellow
    Select how the illumination function is applied:Subtract
    Select the input image:Red
    Name the output image:CropRed
    Select the illumination function:IllumRed
    Select how the illumination function is applied:Subtract
    Select the input image:Green
    Name the output image:CropGreenCorr
    Select the illumination function:IllumGreen
    Select how the illumination function is applied:Subtract
    Select the input image:Blue
    Name the output image:CropBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

ImageMath:[module_num:10|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notes:['New correction module ', 'Correct background from Red into Yellow', '', 'YellowCorrected = Yellow - Red * 0.06 (empirically determined in CP by looking at what minimized bleedthrough)', '', '']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CropYellowCorrected
    Image or measurement?:Image
    Select the first image:CropYellowCorr
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CropRed
    Multiply the second image by:0.1
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
ImageMath:[module_num:11|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notes:['New correction module to fix bleedthrough from Y -> G', '', 'GreenCorrected = Green - Yellow*0.15 (empirically determined by looking at results in CP to minimize visual bleedthrough)', '', '']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CropGreenCorrected
    Image or measurement?:Image
    Select the first image:CropGreenCorr
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CropYellowCorr
    Multiply the second image by:0.15
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
ImageMath:[module_num:12|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notes:['0.1 to 0.15']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CropRedCorrected
    Image or measurement?:Image
    Select the first image:CropRed
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CropGreenCorr
    Multiply the second image by:0.1
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
ImageMath:[module_num:13|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notes:['Combine colour channels for bead detection', '', 'CombineBeads = CropRed + CropYellow + CropGreen', '', 'RS changed this to corrected versions of channels']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CombineBeads
    Image or measurement?:Image
    Select the first image:CropRedCorrected
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CropYellowCorrected
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:CropGreenCorrected
    Multiply the third image by:1.0
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
MaskImage:[module_num:14|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
    Select the input image:CropBlue
    Name the output image:MaskBlue
    Use objects or an image as a mask?:Image
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    Select image for mask:mask
    Invert the mask?:No

MaskImage:[module_num:15|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
    Select the input image:CombineBeads
    Name the output image:MaskCombine
    Use objects or an image as a mask?:Image
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    Select image for mask:mask
    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:16|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
    Select the input image:MaskCombine
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:8
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:17|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
    Select the input image:MaskBlue
    Name the primary objects to be identified:BlueBeads
    Typical diameter of objects, in pixel units (Min,Max):2,9
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.25,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:18|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notes:['Find beads', '', 'Adjusted RS for 1 sec exposure']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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:Beads
    Typical diameter of objects, in pixel units (Min,Max):3,12
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.03,1.0
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    Size of adaptive window:40
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Robust Background

IdentifyPrimaryObjects:[module_num:19|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enabled:False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
    Select the input image:MaskCombine
    Name the primary objects to be identified:Beads
    Typical diameter of objects, in pixel units (Min,Max):3,12
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.03,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:40
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:20|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notes:['Measure bead size and shape']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
    Select object sets to measure:Beads
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectNeighbors:[module_num:21|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notes:['Measure distance between beads']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
    Select objects to measure:Beads
    Select neighboring objects to measure:Beads
    Method to determine neighbors:Within a specified distance
    Neighbor distance:10
    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:22|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notes:['Exclude bead objects which aren’t round or are too close to other beads']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
    Select the objects to filter:Beads
    Name the output objects:FilteredBeads
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Solidity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.85
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:0.6
    Select the measurement to filter by:Neighbors_NumberOfNeighbors_10
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:0.5

IdentifySecondaryObjects:[module_num:23|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notes:['Grow beads by 5 pixels to evaluate surrounding staining']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
    Select the input objects:FilteredBeads
    Name the objects to be identified:ExpandedBeads
    Select the method to identify the secondary objects:Distance - N
    Select the input image:CropBlue
    Number of pixels by which to expand the primary objects:5
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:Yes
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
IdentifyTertiaryObjects:[module_num:24|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notes:['Remove original bead from grown bead object, creating a donut']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
    Select the larger identified objects:ExpandedBeads
    Select the smaller identified objects:FilteredBeads
    Name the tertiary objects to be identified:BeadDonuts
    Shrink smaller object prior to subtraction?:No

MaskObjects:[module_num:25|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notes:['Remove bright blue bead staining from the donut objects. Prevents us counting the bead itself as positive staining if the images aren’t perfectly aligned.']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
    Select objects to be masked:BeadDonuts
    Name the masked objects:MaskedBeadDonuts
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:BlueBeads
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

IdentifySecondaryObjects:[module_num:26|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notes:['Expand the positive blue beads up to 20 pixels to find the edge of the droplets.', '', 'Why is input class Beads here instead of blue beads??? ', 'ORIIGNAL']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enabled:False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
    Select the input objects:Beads
    Name the objects to be identified:BlueDroplets
    Select the method to identify the secondary objects:Distance - B
    Select the input image:CropBlue
    Number of pixels by which to expand the primary objects:20
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:150
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    Thresholding method:Otsu

MedianFilter:[module_num:27|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
    Select the input image:MaskBlue
    Name the output image:MedianFilterMaskBlue
    Window:5

IdentifyPrimaryObjects:[module_num:28|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
    Select the input image:MedianFilterMaskBlue
    Name the primary objects to be identified:BlueDroplets
    Typical diameter of objects, in pixel units (Min,Max):15,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:3
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.04,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:30
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    Thresholding method:Otsu

RelateObjects:[module_num:29|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notes:['Relate droplets to beads']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
    Parent objects:BlueDroplets
    Child objects:FilteredBeads
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:30|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notes:['Bad droplets=contain more than 1 bead']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
    Select the objects to filter:BlueDroplets
    Name the output objects:Bad_droplets
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Children_FilteredBeads_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1.5
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:31|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notes:['Use bad_droplets to mask original beads']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
    Select objects to be masked:FilteredBeads
    Name the masked objects:AcceptedBeads
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Bad_droplets
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

TrackObjects:[module_num:32|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
    Choose a tracking method:LAP
    Select the objects to track:AcceptedBeads
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    Select display option:Color and Number
    Save color-coded image?:No
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    Select the movement model:Both
    Number of standard deviations for search radius:3.0
    Search radius limit, in pixel units (Min,Max):2.0,25
    Run the second phase of the LAP algorithm?:Yes
    Gap closing cost:40
    Split alternative cost:1
    Merge alternative cost:1
    Maximum gap displacement, in pixel units:25
    Maximum split score:50
    Maximum merge score:50
    Maximum temporal gap, in frames:5
    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:5
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
    Mitosis alternative cost:1
    Maximum mitosis distance, in pixel units:40
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
SaveImages:[module_num:33|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:TrackedBeads
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_track
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Track_\g<Chip>_\g<Date>_\g<Lane>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectSizeShape:[module_num:34|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notes:['Measure droplet sizes']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
    Select object sets to measure:BlueDroplets
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:35|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notes:['Remove droplets which aren’t round, typically caused by noise at the edge of a slide']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
    Select the objects to filter:BlueDroplets
    Name the output objects:AcceptedDroplets
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:1
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Solidity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.86
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:0.6
    Select additional object to relabel:AcceptedBeads
    Name the relabeled objects:AcceptedBeads2

MeasureObjectSizeShape:[module_num:36|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notes:['Measure size and shape of all accepted objects']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
    Select object sets to measure:AcceptedBeads, AcceptedDroplets, BeadDonuts
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:37|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notes:['Associate droplets with beads']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
    Parent objects:AcceptedDroplets
    Child objects:AcceptedBeads
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectIntensity:[module_num:38|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notes:['Measure intensity for each stain within accepted objects']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
    Select images to measure:CropBlue, CropGreenCorrected, CropRedCorrected, CropYellowCorrected
    Select objects to measure:AcceptedBeads, AcceptedDroplets, BeadDonuts

CalculateMath:[module_num:39|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notes:['Adding CropGreen with CropYellowCorrected to make GplusYC. We will add GplusYC to CropRed in the next step to make a ColorSum for normalization. ', '', 'GplusYC = CropGreen + CropYellowCorrected', '', 'RS changed green to greencorrected']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
    Name the output measurement:GplusYC
    Operation:Add
    Select the first operand measurement type:Object
    Select the first operand objects:AcceptedBeads
    Select the first operand measurement:Intensity_MeanIntensity_CropGreenCorrected
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:AcceptedBeads
    Select the second operand measurement:Intensity_MeanIntensity_CropYellowCorrected
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:40|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notes:['GplusYC+CropRed = ColorSum', '']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
    Name the output measurement:ColorSum
    Operation:Add
    Select the first operand measurement type:Object
    Select the first operand objects:AcceptedBeads
    Select the first operand measurement:Math_GplusYC
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:AcceptedBeads
    Select the second operand measurement:Intensity_MeanIntensity_CropRedCorrected
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:41|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notes:['Normalizing the red channel. NormRed = CropRed/ColorSum']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
    Name the output measurement:NormRed
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:AcceptedBeads
    Select the numerator measurement:Intensity_MeanIntensity_CropRedCorrected
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:AcceptedBeads
    Select the denominator measurement:Math_ColorSum
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:42|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notes:['Normalizing the Yellow channel. NormYellow = CropYellowCorrected/ColorSum']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
    Name the output measurement:NormYellow
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:AcceptedBeads
    Select the numerator measurement:Intensity_MeanIntensity_CropYellowCorrected
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:AcceptedBeads
    Select the denominator measurement:Math_ColorSum
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:43|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notes:['Normalizing the green channel. NormGreen = CropGreen/ColorSum.']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
    Name the output measurement:NormGreen
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:AcceptedBeads
    Select the numerator measurement:Intensity_MeanIntensity_CropGreenCorrected
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:AcceptedBeads
    Select the denominator measurement:Math_ColorSum
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
RescaleIntensity:[module_num:44|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notes:['Rescale the blue channel to aid display']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
    Select the input image:CropBlue
    Name the output image:RescaleBlue
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:45|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
    Select the input image:CombineBeads
    Name the output image:RescaleBeads
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.25
    Intensity range for the output image:0.0,1.0
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
OverlayOutlines:[module_num:46|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleBeads
    Name the output image:BeadsOnFluor
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#FB0280
    Select objects to display:AcceptedBeads

OverlayOutlines:[module_num:47|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notes:['Construct overlay of donut objects (used to test positivity).']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleBlue
    Name the output image:DonutsOnBlue
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#FD8008
    Select objects to display:BeadDonuts

OverlayOutlines:[module_num:48|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notes:['Contruct an overlay of the detected droplets (used to evaluate size and accuracy)']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleBlue
    Name the output image:DropletsOnBlue
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#FB0207
    Select objects to display:AcceptedDroplets
    Select outline color:#21FF06
    Select objects to display:AcceptedBeads

SaveImages:[module_num:49|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
    Select the type of image to save:Image
    Select the image to save:BeadsOnFluor
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Beads
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<Date>_\g<Chip>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:50|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
    Select the type of image to save:Image
    Select the image to save:DonutsOnBlue
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Donuts
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<Date>_\g<Chip>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:51|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
    Select the type of image to save:Image
    Select the image to save:DropletsOnBlue
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Droplets
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<Date>_\g<Chip>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:52|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
    Select the type of image to save:Image
    Select the image to save:RescaleBlue
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Blue
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<Date>_\g<Chip>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

DisplayDataOnImage:[module_num:53|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:AcceptedBeads
    Measurement to display:TrackObjects_Label
    Select the image on which to display the measurements:BeadsOnFluor
    Text color:#FFFF0A
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):8
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):15
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:54|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Track
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|track/\g<Chip>_\g<Lane>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

RescaleIntensity:[module_num:55|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
    Select the input image:CombineBeads
    Name the output image:RescaleBeads
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:56|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
    Select the input image:CombineBeads
    Name the output image:PreviewBeads
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.25
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
RescaleIntensity:[module_num:57|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
    Select the input image:CropRed
    Name the output image:BeadsRed
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.1
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
RescaleIntensity:[module_num:58|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
    Select the input image:CropGreenCorrected
    Name the output image:BeadsGreen
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.1
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
RescaleIntensity:[module_num:59|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
    Select the input image:CropYellowCorrected
    Name the output image:BeadsYellow
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.1
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
GrayToColor:[module_num:60|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
    Select a color scheme:RGB
    Rescale intensity:No
    Select the image to be colored red:CropRedCorrected
    Select the image to be colored green:CropYellowCorrected
    Select the image to be colored blue:CropGreenCorrected
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveCroppedObjects:[module_num:61|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enabled:False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
    Objects:AcceptedBeads
    Directory:Default Output Folder sub-folder|\g<Date>_\g<Chip>_\g<Lane>_CroppedBeads
    Saved file format:png
    Do you want to save cropped images or object masks?:Images
    Image:ColorImage

ConvertObjectsToImage:[module_num:62|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
    Select the input objects:AcceptedBeads
    Name the output image:Bead_seg
    Select the color format:uint16
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
SaveImages:[module_num:63|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
    Select the type of image to save:Image
    Select the image to save:Bead_seg
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_seg
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|label_map
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:64|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
    Select the type of image to save:Image
    Select the image to save:BeadsOnFluor
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Beads
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<Date>_\g<Chip>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:65|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
    Select the type of image to save:Image
    Select the image to save:BeadsGreen
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Green
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<Date>_\g<Chip>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:66|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
    Select the type of image to save:Image
    Select the image to save:BeadsRed
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Red
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<Date>_\g<Chip>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:67|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
    Select the type of image to save:Image
    Select the image to save:BeadsYellow
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Yellow
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<Date>_\g<Chip>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:68|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
    Select the type of image to save:Image
    Select the image to save:PreviewBeads
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Combine
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<Date>_\g<Chip>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToDatabase:[module_num:69|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Default Input Folder sub-folder|Documents/Sabeti Lab/Projects/CCF/Experiments/Microscopy:Imaging Data/CCF161 Low Targets 1 Reanalysis
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:CCF152.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:BeadsGreen,BeadsRed,BeadsYellow,CropBlue,CropGreen,CropRed,CropYellowCorrected,PreviewBeads
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:None
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    Include information for all images, using default values?:No
    Properties image group count:4
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:Beads
    Which objects should be used for locations?:None
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:color_code
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
    Select an image to include:PreviewBeads
    Use the image name for the display?:Yes
    Image name:Channel1
    Channel color:blue
    Select an image to include:BeadsRed
    Use the image name for the display?:Yes
    Image name:Channel2
    Channel color:red
    Select an image to include:BeadsGreen
    Use the image name for the display?:Yes
    Image name:Channel3
    Channel color:green
    Select an image to include:BeadsYellow
    Use the image name for the display?:Yes
    Image name:Channel4
    Channel color:yellow
    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:70|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Documents/Sabeti Lab/Projects/CCF/Experiments/Microscopy:Imaging Data/TGN028-1 48 well pilot on plate reader plate reader images April 27 2022
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:AcceptedBeads
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:AcceptedDroplets
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:BeadDonuts
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
